<CompuCell3D Revision="20171208" Version="3.7.7">
   
   <Potts>
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Boundary_x>Periodic</Boundary_x>
      <Steps>5000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="A"/>
      <CellType TypeId="2" TypeName="B"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="ExternalPotential">
       <Algorithm>PixelBased</Algorithm>
   </Plugin>

   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="A">8.0</Energy>
      <Energy Type1="Medium" Type2="B">8.0</Energy>
      <Energy Type1="A" Type2="A">10.0</Energy>
      <Energy Type1="A" Type2="B">10.0</Energy>
      <Energy Type1="B" Type2="B">10.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
</CompuCell3D>
